# set the world volume
/gate/world/geometry/setXLength 600. cm
/gate/world/geometry/setYLength 600. cm
/gate/world/geometry/setZLength 600. cm

# set the sub-volume - lung
/gate/world/daughters/name LungPhantom
/gate/world/daughters/insert ImageNestedParametrisedVolume


# READ IMAGE (.h33 for Interfile, .mhd for MetaImage, .hdr for Analyze)
/control/alias SimuId 1
/gate/LungPhantom/geometry/setImage /home/gateuser/sim/GenerateImages/header/AtnGate{SimuId}.h33
#/gate/LungPhantom/geometry/setImage /home/gateuser/sim/GenerateImages/header/AtnGate1.h33


# INSERT THE TRANSLATOR THAT WILL CONVERT THE IMAGE FROM DIGITAL VALUES TO MATERIAL INFORMATION
# RANGE TRANSLATOR (label values)
/gate/LungPhantom/geometry/setRangeToMaterialFile /home/gateuser/sim/AttenuationConv.dat

/gate/LungPhantom/placement/setTranslation 0. 0. 0. mm
/gate/LungPhantom/placement/setRotationAxis 1 0 0
/gate/LungPhantom/placement/setRotationAngle 0 deg  

# 敏感探测器绑定
/gate/LungPhantom/attachPhantomSD


# ACTORS to get mu map
/gate/actor/addActor MuMapActor getMuMap
/gate/actor/getMuMap/attachTo LungPhantom
#/gate/actor/getMuMap/save /home/gateuser/sim/images/Phantom{SimuId}.hdr
/gate/actor/getMuMap/save /home/gateuser/sim/output/Phantom1.hdr
/gate/actor/getMuMap/setVoxelSize 10.0 10.0 10.0 mm 
/gate/actor/getMuMap/setResolution 16 16 16 
/gate/actor/getMuMap/setEnergy 511 keV

